<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="200" GradRiseTime="0.1" Name="P" Nx="64">
   <ConcatSequence Name="C1" Repetitions="1">
      <ATOMICSEQUENCE Name="A1">
         <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="90" Name="P1"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A2">
         <TRAPGRADPULSE Area="-a1/2" Axis="GX" Name="pre" Observe="ro,Area"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A3">
         <TRAPGRADPULSE ADCs="a1" Axis="GX" FlatTopArea="2*a2" FlatTopTime="4" Frequency="Pi" InitialPhase="Pi" Name="ro" Observe="P,Nx/P,KMAXx"/>
      </ATOMICSEQUENCE>
   </ConcatSequence>
</Parameters>