<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="64" FOVy="64" FOVz="1" Name="P" Nx="32" Ny="32" Nz="1" TE="15" TR="150">
   <ConcatSequence Name="TSE">
      <ConcatSequence Name="O" Observe="P.Ny=NY, I.Repetitions=R" Repetitions="NY/R">
         <ATOMICSEQUENCE Name="A1">
            <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="90" Name="P1"/>
         </ATOMICSEQUENCE>
         <ATOMICSEQUENCE Name="A2">
            <TRAPGRADPULSE Area="0.5*A" Axis="GX" Name="P2" Observe="P5.Area=A"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="TE/2" DelayType="B2E" Name="D1" Observe="P.TE=TE" StartSeq="A1"/>
         <CONCATSEQUENCE Name="I" Repetitions="4">
            <ATOMICSEQUENCE Name="A3">
               <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="180" InitialPhase="90" Name="P3" Refocusing="1"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A4">
               <TRAPGRADPULSE Area="-KMY+DKY*(CI+RI*CO)" Axis="GY" Name="P4" Observe="P.KMAXy=KMY, P.DKy=DKY, I.Counter=CI, I.Repetitions=RI, O.Counter=CO"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="TE/2" DelayType="C2C" Name="D2" Observe="P.TE=TE" StartSeq="A3" StopSeq="A5"/>
            <ATOMICSEQUENCE Name="A5">
               <TRAPGRADPULSE ADCs="NX" Axis="GX" FlatTopArea="2*KMX" FlatTopTime="4" Name="P5" Observe="P.KMAXx=KMX, P.Nx=NX"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A6">
               <TRAPGRADPULSE Area="-A" Axis="GY" Name="P6" Observe="P4.Area=A"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="TE" DelayType="B2E" Name="D3" Observe="P.TE=TE" StartSeq="A3"/>
         </CONCATSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="TR" DelayType="B2E" Name="D4" Observe="P.TR=TR" StartSeq="A1"/>
      </ConcatSequence>
   </ConcatSequence>
</Parameters>